PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': "['practice', '1', '2', '3']", 'which eye is blue': "['right', 'left']", 'eye tested': "['right', 'left']", 'previous contrast': ''}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['images/radialEye_blue_00.png', 'images/radialEye_blue_01.png', 'images/radialEye_blue_02.png', 'images/radialEye_blue_03.png', 'images/radialEye_blue_04.png', 'images/radialEye_blue_05.png', 'images/radialEye_blue_06.png', 'images/radialEye_blue_07.png', 'images/radialEye_red_00.png', 'images/radialEye_red_01.png', 'images/radialEye_red_02.png', 'images/radialEye_red_03.png', 'images/radialEye_red_04.png', 'images/radialEye_red_05.png', 'images/radialEye_red_06.png', 'images/radialEye_red_07.png', 'images/bullsEye_blue_00.png', 'images/bullsEye_blue_01.png', 'images/bullsEye_blue_02.png', 'images/bullsEye_blue_03.png', 'images/bullsEye_blue_04.png', 'images/bullsEye_blue_05.png', 'images/bullsEye_blue_06.png', 'images/bullsEye_blue_07.png', 'images/bullsEye_red_00.png', 'images/bullsEye_red_01.png', 'images/bullsEye_red_02.png', 'images/bullsEye_red_03.png', 'images/bullsEye_red_04.png', 'images/bullsEye_red_05.png', 'images/bullsEye_red_06.png', 'images/bullsEye_red_07.png', 'image_list_left_left.csv', 'image_list_left_right.csv', 'image_list_right_left.csv', 'image_list_right_right.csv']
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  color = black
  expName = eyeDomExp
  exportHTML = on Save
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Routines
  Routine contWarning
    CodeComponent checkInputCont
      Code Type = Auto->JS
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      Begin Routine:
        #display txt to verify the calculated contrast was properly input
        if expInfo['previous contrast'] =='' and expInfo['session']!='practice':
            txtVar = 'You did not input the correct contrast value.  Please restart the session and input the value you wrote down from the practice session to the last entry of the dialog box'
            continueRoutine = True
        else:
            continueRoutine=False
            txtVar='' #this has to always be defined
    TextComponent warningESC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $txtVar
      units = norm
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  Routine findScreenResol
    CodeComponent JScode
      Code Type = JS
      Begin JS Experiment:
        //make python online friendly
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;
        random=Math.random;
        sort = function(array) {
            return array.sort((a, b) => (a - b));
        }
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }
        Array.prototype.index = [].indexOf;
        sum = (arr) => arr.reduce((a,b)=>a+b)
        tan = Math.tan;
    CodeComponent pxPerCmCode
      Code Type = Auto->JS
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      Begin Experiment:
        x_pix = 400
        pxPerCm = x_pix/8.56 #8.56 is standard size of credit card width
        pxChange = 1
      Each Frame:
        keys=event.getKeys()
        #calculate the pixels per cm from the actual size of the card
        if len(keys):
            if 'up' in keys:
                x_pix = x_pix + pxChange
            elif 'down' in keys:
                x_pix = x_pix - pxChange
            pxPerCm = x_pix/8.56     # divide num of pixels
                                                   # wide by the size in cm
                                                   # of standard card to get
                                                   # resolution (px/cm)
      End Routine:
        thisExp.addData('px per cm', pxPerCm)
    TextComponent instructTop
      letterHeight = .05
      pos = (0, .7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Please use a credit card or any card of the same size (drivers license, grocery store membership card, etc.)

        Hold it onto the screen, and adjust the image on screen to match the size of your card.

        (If you don't have access to a real card, you can use a ruler to measure image width to 3.37inch or 85.6mm, or make your best guess!)
    TextComponent instructBottom
      letterHeight = .05
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        UP arrow = Bigger
        DOWN arrow = Smaller

        Click “Next” when done
    ImageComponent cardImage
      image = images/bankImage.png
      saveStartStop = False
      size [set every frame] = $(x_pix, x_pix * 0.6265625)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    PolygonComponent line_R_vert
      fillColor = $[1,1,1]
      pos [set every frame] = (x_pix/2, 0)
      shape = regular polygon...
      size [set every frame] = (1, (x_pix * 0.6304906542)+80)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_L_vert
      fillColor = $[1,1,1]
      pos [set every frame] = (-x_pix/2, 0)
      shape = regular polygon...
      size [set every frame] = (1, (x_pix * 0.6304906542)+80)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_T_horiz
      fillColor = $[1,1,1]
      pos [set every frame] = (0, (x_pix * 0.6304906542)/2)
      shape = regular polygon...
      size [set every frame] = (x_pix +80, 1)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_B_horiz
      fillColor = $[1,1,1]
      pos [set every frame] = (0, -(x_pix * 0.6304906542)/2)
      shape = regular polygon...
      size [set every frame] = (x_pix +80, 1)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent nextPoly
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.8, -.8)
      shape = rectangle
      size = (0.12, 0.06)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent nextButton
      color = black
      letterHeight = 0.05
      pos = (.8, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Next
      units = norm
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    MouseComponent nextMouse
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine findScreenEdge
    TextComponent instruct
      letterHeight = 0.05
      pos = (0, .7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Use the left and right arrow keys to move the red vertical line so that it lines up with the blue line.
        You may hold down the arrow key to speed up the movement of the red line

        Once they are aligned click “Next”.
    CodeComponent scrnEdgeCode
      Code Type = Auto->JS
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      Begin Experiment:
        #we want to measure the edge of the screen
        # we will need this measurement for the next task
        # of estimating the blindspot

        screenEdgePx = 0.0
        skip_checkEdge = False
        #set variables for moving the triangle horizontally
        xPos = -300
        posChange = 1
      Each Frame:
        #check for any key press
        keys=event.getKeys()
        #move the cursor in different sizes as you get closer
        #to the target line
        if xPos > -500:
            posChange = 10
        elif (xPos < -500) and (xPos > -610):
            posChange = 5
        else:
            posChange = 3
        #calculate the pixels to move based on keypresses
        if len(keys):
            if 'right' in keys:
                xPos = xPos + posChange
            elif 'left' in keys:
                xPos = xPos - posChange
      End Routine:
        #screenEdgeNorm = slider.getRating()
        screenEdgeNorm = xPos
        #screenEdgePx = 10000*screenEdgeNorm
        screenEdgePx =screenEdgeNorm
        if screenEdgePx <(-300):
            skip_checkEdge = True
            screenEdgeLoop.finished = True

        #thisExp.addData('screenEdgeNorm', screenEdgeNorm)
        thisExp.addData('screenEdgePx', screenEdgePx)
    PolygonComponent line
      fillColor = white
      lineWidth = 5
      nVertices = 3
      pos = (-.7,.01)
      shape = line
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent moveTri
      fillColor = red
      lineColor = red
      lineWidth = 3
      nVertices = 3
      ori = 90
      pos [set every frame] = (xPos, 35)
      shape = line
      size = (30,70)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent targetTri
      fillColor = $[-1,-1,1]
      lineColor = $[-1,-1,1]
      lineWidth = 5
      nVertices = 3
      ori = 90
      pos = (-.95, -.01)
      shape = line
      size = (0.05, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent nextPoly1
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      pos = (0.8, -.8)
      shape = rectangle
      size = (0.12, 0.06)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent nextButton1
      color = black
      letterHeight = 0.05
      pos = (.8, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = Next
      units = norm
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    MouseComponent nextMouse1
      clickable = nextButton1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $xPos
      units = norm
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  Routine checkScreenEdge
    CodeComponent checkEdgCode
      Code Type = Auto->JS
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      Each Frame:
        if skip_checkEdge==True:
            continueRoutine = False

        # if spacebar is hit locally before moving triangle
        # you get a crash, but if online, you get a screen
        # asking you to align the red arrow to the blue

        # also slider looks like trash locally, but good
        # online which is where it matters
    TextComponent instructPls
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please move the red line to line up with the blue line before continuing.
    PolygonComponent tryAgainPoly
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (0.8, -0.8)
      shape = rectangle
      size = (0.15, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent tryAgainButton
      color = black
      letterHeight = 0.05
      pos = (.8, -.8)
      startVal [time (s)] = 0.0
      text [set every frame] = Try again
      units = norm
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    MouseComponent tryAgainMouse
      clickable = tryAgainButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine startBlindSpot
    CodeComponent setParams
      Code Type = Auto->JS
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      Begin Experiment:
        num_repeat = 3 # how many trials to avg over
        dot2square_dist = 6 # in cm, choose; default was 6cm
        square2center_dist = 9 # in cm right of center, choose; default was 6cm

        desiredVisAngl = 0.029147 # in radians; paper says within 1.67 deg

        # better to choose params here since other code
        # component in findBlindSpot is type "both"
    CodeComponent startBSCode
      Code Type = Auto->JS
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      Begin Experiment:
        loopN = 0
      Begin Routine:
        square_x = pxPerCm * square2center_dist # it is important to have this defined here and not in begin exp where original incorrect pxPerCm will be used
        loopN = 0     # yes need it in both places
        clickedRestart = False
    ImageComponent instruct1
      image = images/instruct1.png
      pos [set every frame] = (0, pxPerCm*3.5)
      size [set every frame] = (pxPerCm*20, pxPerCm*7.09)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent startKey
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent squareStart
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = rectangle
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent dotStart
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 20
      pos [set every frame] = (square_x - (pxPerCm * dot2square_dist), -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent tinyDotStart
      fillColor = $[1,1,1]
      nVertices = 10
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.1, pxPerCm*.1)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent dumiTrialCount
      color = blue
      letterHeight = 0.07
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        $f"0 out of {num_repeat}"
    PolygonComponent dumiRestrtPoly
      fillColor = $[-.3,-.3,-.3]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.7, -.8)
      shape = rectangle
      size = (0.4, 0.14)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent dumiRestrtButt
      letterHeight = 0.05
      pos = (0.7, -0.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        click here to start over
        (if you made a mistake)
  Routine findBlindSpot
    CodeComponent blindSpotCode
      Code Type = Both
      Begin Experiment:
        dot_dist_list = []
        dist2screen = 0
      Begin JS Experiment:
        dot_dist_list = [];
        dist2screen = 0;
      Begin JS Routine:
        dot_x = (square_x - (pxPerCm * dot2square_dist));
        square_x = (pxPerCm * square2center_dist);
        loopN += 1;
      Begin Routine:
        dot_x =  square_x - (pxPerCm * dot2square_dist)
        square_x = pxPerCm * square2center_dist # it is important to have this defined here and not in begin exp where original incorrect pxPerCm will be used

        loopN += 1
      Each Frame:
        if dot_x>screenEdgePx:
            dot_x = dot_x-1

        else:
            continueRoutine = False
            inLoop.finished = True
            midLoop.finished = True
      Each JS Frame:
        if ((dot_x > screenEdgePx)) {
            dot_x = (dot_x - 1);
        } else {
            continueRoutine = false;
            inLoop.finished = true;
            midLoop.finished = true;
        }
      End JS Routine:
        dot_dist_list.push((square2center_dist*pxPerCm)-dot_x)
        avg_dot_dist = (sum(dot_dist_list.slice((- num_repeat))) / num_repeat);
        dot_dist_cm = (avg_dot_dist / pxPerCm);
        dist2screen = (dot_dist_cm / 0.24);

        thisExp.addData("num_repeat", num_repeat);
        thisExp.addData("square_x", square_x);
        thisExp.addData("square2center_dist", square2center_dist);
        thisExp.addData("dot2square_dist", dot2square_dist);
        thisExp.addData("dot_dist_list", dot_dist_list);
        thisExp.addData("avg_dot_dist", avg_dot_dist);
        thisExp.addData("dist2screen", dist2screen);
      End Routine:
        dot_dist_list.append((square2center_dist*pxPerCm)-dot_x)
        avg_dot_dist = sum(dot_dist_list[-num_repeat:])/num_repeat # only avg the last n valid rounds
        dot_edge_dist = avg_dot_dist - ((pxPerCm*.6)/2) # need dist to right-most edge of dot, not center
        # note that I haven't implemented this ^ in the js code, b/c the diff is negligible, & if anything the est dist is usually shorter than reality
        dot_dist_cm = dot_edge_dist/pxPerCm
        dist2screen = dot_dist_cm/.24 # the angle between
        # fovea and blind spot in eye is usually around
        # 13.5 degrees (tan(13.5) = .24)

        thisExp.addData('num_repeat', num_repeat)
        thisExp.addData('square_x', square_x)
        thisExp.addData('square2center_dist', square2center_dist)
        thisExp.addData('dot2square_dist', dot2square_dist)
        thisExp.addData('dot_dist_list', dot_dist_list)
        thisExp.addData('avg_dot_dist', avg_dot_dist)
        thisExp.addData('dist2screen', dist2screen)
    PolygonComponent square
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = rectangle
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent dot
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 20
      pos [set every frame] = (dot_x, -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent tinyDot
      fillColor = $[1,1,1]
      nVertices = 10
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.1, pxPerCm*.1)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent endRound
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent trialCounter
      color = blue
      letterHeight = 0.07
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every frame]:
        $f"{loopN} out of {num_repeat}"
    PolygonComponent restartPoly
      fillColor = $[-.3,-.3,-.3]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.7, -.8)
      shape = rectangle
      size = (0.4, 0.14)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent restartText
      letterHeight = 0.05
      pos = (0.7, -0.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        click here to start over
        (if you made a mistake)
    MouseComponent restartMouse
      clickable = restartText
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine checkForRestart
    CodeComponent breakLoop
      Code Type = Auto->JS
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      Begin Experiment:
        skipTrials = False
        clickedRestart = False
      Begin Routine:
        if restartMouse.clicked_name:
            if restartMouse.clicked_name[0] =='restartText':
                inLoop.finished = True
                clickedRestart = True

        if loopN ==num_repeat and dot_x>screenEdgePx and clickedRestart == False:
            continueRoutine = False
            inLoop.finished = True
            midLoop.finished = True
            outerLoop.finished = True
            skipTrials = True
  Routine warning
    CodeComponent oopsCode
      Code Type = Auto->JS
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      Each Frame:
        if skipTrials==True:
            continueRoutine = False
    TextComponent instructOops
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        oops! Looks like we ran out of space.

        Try moving a little closer to the screen and click the button to try again.
    PolygonComponent tryAgainPoly1
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.8, -.8)
      shape = rectangle
      size = (0.15, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent tryAgainButton1
      color = black
      letterHeight = 0.05
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.0
      text [set every frame] = Try again
      units = norm
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    MouseComponent tryAgainMouse1
      clickable = tryAgainButton1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine goodJob_prepForExp
    TextComponent instruct2
      letterHeight = .05
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 2
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      text:
        Great job!

        ** Please keep this distance from your screen until the very end! **

        You can uncover/open your right eye now.
        Make sure you are wearing the colored glasses, and prepare for the next block.

        Press the spacebar to continue to the main experiment.
    KeyboardComponent keyToMoveOn
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent calcImgSize_2
      Code Type = Auto->JS
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      Begin Routine:
        imgSizeCm = 2 * dist2screen * tan(.5*desiredVisAngl)
        #set at beginning of routine since this is calculated in prev routines
        constSize=imgSizeCm*pxPerCm
    CodeComponent checkSess
      Code Type = Auto->JS
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      Begin Experiment:
        contrastRange = []
        contR=1.0
      Begin Routine:
        #the first session should measure eye dominance and
        #allow for some practice trials of the experiment
        if expInfo['session'] =='practice':
            eyeDom = 0 #run BR to define which eye will be tested
            binRivRun = 0 # skip BR at end of actual exp
            #current numbers will make practice last 2 min tot
            trialReps = 30 #have 10 trials in each block of the actual experiment
            blockReps = 1 # only run 3 blocks
            finalTrialDur =3 #shorten the amount of time between trials
            contR = .5 #DELETE after checking
            contB=.5 #DELETE after
            #contrast variables
            contrastTrials =5 # run contrast 5 times
            contCounter = 1 #dont skip
            skipContrast = 1 #don't skip

        else:
            eyeDom = 0 #skip BR measurement
            binRivRun = 1 # run BR at end of actual exp
            #current numbers will make the  task last ~30min
            trialReps = 30 # have 30 trials in each block ~4-5min
            blockReps = 6
            finalTrialDur =10 #at most 10s
            contrastTrials = 0 #skip contrast
            skipContrast = 0#skip contrast
  Routine instContrast
    TextComponent instructions
      letterHeight = 0.04
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome!
        Please wear your glasses throughout the experiment.

        First you will be presented two images side by side. A bull’s eye grating and a radial grating.
        Adjust the contrast of the bull’s eye grating until they are equally as bright.
        You will redo this adjustment 5 times.

        Press any key to continue
    KeyboardComponent key_start
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent whichCSV
      Code Type = Auto->JS
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      Begin Experiment:
        #make the csv based on user input set this to a
        #variable for easier readability
        fileCSV= 'image_list_'+expInfo['eye tested']+'_'+expInfo['which eye is blue']+'.csv'
    CodeComponent initDriftDir
      Code Type = Auto->JS
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      Begin Experiment:
        nFrames = 7 #how many images to loop through from 0
        #change direction of drift for pre trial
        direction = random() #random number from 0-1
        driftLs =list(range((nFrames+1)*2)) #make  list that is the same size as the csv files and increases by 1
        if direction >0.5:
            driftrows= driftLs[:(nFrames+1)] #grab the first nFrames images
        else:
            driftrows = driftLs[(nFrames+1):] # grab the last nFrames images
      Begin Routine:
        contStrCounter = str(contCounter)
        txtVar = 'You are starting trial ' + contStrCounter + ' of 5 trials'
        #reset contrast every trial
        contB= 0.7
    TextComponent blockCount
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $txtVar
      units = norm
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    TextComponent whichCSV_2
      letterHeight = 0.04
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fileCSV
      units = norm
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  Routine gratingCode
    CodeComponent changeCont
      Code Type = Auto->JS
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      End Routine:
        #manipulate stim
        if contrastResp.keys == 'up':
            contB +=0.01
            if contB > 1:
                contB=1
        if contrastResp.keys == 'down':
            contB -=0.01
            if contB <=0:
                contB= 0
  Routine bothContrast
    ImageComponent radial_stim_2
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = contR
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent bulls_stim_2
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = contB
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    TextComponent brightInst_2
      letterHeight = 0.03
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Are the two images equally bright?
        Press ‘Y’ for yes ’N’ for no
    KeyboardComponent key_resp_cont_3
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent repeat
      Code Type = Auto->JS
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      End Routine:
        #don't repeat if contrast is the same
        if key_resp_cont_3.keys =='y':
                redoContAdj.finished=True
        else:
            contB=0.7
            contR=1.0
  Routine contrastTrials
    CodeComponent calcCont
      Code Type = Auto->JS
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      Begin Experiment:
        tempCont = 0
      Begin Routine:
        contCounter +=1 #count each trials for display
        contrastRange.append(contB) #make a list of the contrast
        tempCont += contB #temporarily add each contrast for averaging
      End Routine:
        if contCounter ==5:
            contB= tempCont/5 #find average of 5 trials
  Routine finalCont
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        contB= tempCont/5
        txtContB = str(round(contB,2))
        txtVar = 'Your contrast number is ' + txtContB
        thisExp.addData('contrastRange', contrastRange)
    TextComponent instContNum
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = Please write down your contrast number. You will input this number in the initial dialog box in all future sessions. Once you record the number press ‘space’ to continue
      units = height
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    TextComponent displayContNum
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $txtVar
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine gratingContrast
    TextComponent brightInst
      letterHeight = 0.03
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ‘space’ if brightness is equal
      units = height
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    TextComponent keyPressInst
      letterHeight = 0.03
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Press ‘up’ to increase the brightness of the bull’s eye grating
        Press ‘down’ to decrease the brightness of the bull’s eye grating
    ImageComponent bulls_stim
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = contB
      pos [set every repeat] = placeB
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent radial_stim
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = contR
      pos [set every repeat] = placeR
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    PolygonComponent overlayRadial
      fillColor = black
      lineColor = black
      lineWidth = 0
      opacity [set every repeat] = contB
      pos [set every repeat] = placeR
      saveStartStop = False
      shape = rectangle
      size = (80,80)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent contrastResp
      allowedKeys = 'up','down','space'
      correctAns = $corr
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent checkDone
      Code Type = Auto->JS
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      Begin Experiment:
        #place the right picture in the proper location
        if expInfo['eye tested'] =='right':
            placeB=(150, 0)
            placeR = (-150, 0)
            labelB = (.2, -.1)
            labelR =(-.2, -.1)
        else:
            placeB=(-150, 0)
            placeR = (150, 0)
            labelB = (-.2, -.1)
            labelR =(.2, -.1)
      End Routine:
        if contrastResp.keys =='space':
            adjustContrast.finished=True
    TextComponent radialLabel
      letterHeight = 0.015
      pos [set every repeat] = labelR
      startVal [time (s)] = 0.0
      text = Radial grating
      units = height
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    TextComponent bullsLabel
      letterHeight = 0.015
      pos [set every repeat] = labelB
      startVal [time (s)] = 0.0
      text = Bull’s eye grating
      units = height
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Flow
  Routine contWarning
  Routine findScreenResol
  LoopInitiator screenEdgeLoop loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine findScreenEdge
    Routine checkScreenEdge
  LoopTerminator screenEdgeLoop
  LoopInitiator outerLoop loopType="TrialHandler"
    loopType = random
    nReps = 20
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    LoopInitiator midLoop loopType="TrialHandler"
      loopType = random
      nReps = 50
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      Routine startBlindSpot
      LoopInitiator inLoop loopType="TrialHandler"
        loopType = sequential
        nReps = num_repeat
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        Routine findBlindSpot
        Routine checkForRestart
      LoopTerminator inLoop
    LoopTerminator midLoop
    Routine warning
  LoopTerminator outerLoop
  Routine goodJob_prepForExp
  LoopInitiator contAveraging loopType="TrialHandler"
    loopType = sequential
    nReps = skipContrast
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    LoopInitiator contTrials loopType="TrialHandler"
      loopType = sequential
      nReps = contrastTrials
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      LoopInitiator redoContAdj loopType="TrialHandler"
        conditionsFile = $fileCSV
        isTrials = False
        loopType = random
        nReps = 10
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        Routine instContrast
        LoopInitiator adjustContrast loopType="TrialHandler"
          Selected rows = 1
          conditionsFile = $fileCSV
          isTrials = False
          loopType = random
          nReps = 1000
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          Routine gratingContrast
          Routine gratingCode
        LoopTerminator adjustContrast
        Routine bothContrast
      LoopTerminator redoContAdj
      Routine contrastTrials
    LoopTerminator contTrials
    Routine finalCont
  LoopTerminator contAveraging
